<CompuCell3D Revision="6" Version="4.4.1">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>8</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="301" y="301" z="1"/>
      <!-- <Steps>195</Steps> -->
      <!-- <Steps>800</Steps> -->
      <Steps>1600</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
      <RandomSeed>10</RandomSeed>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="U"/>
      <CellType TypeId="2" TypeName="I"/>
      <CellType TypeId="3" TypeName="E"/>
      <CellType TypeId="4" TypeName="D"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
<Plugin Name="Contact">
   <!-- Specification of adhesion energies -->
   <Energy Type1="Medium" Type2="Medium">10.0</Energy>
   <Energy Type1="Medium" Type2="U">10.0</Energy>
   <Energy Type1="Medium" Type2="I">10.0</Energy>
   <Energy Type1="Medium" Type2="E">10.0</Energy>
   <Energy Type1="Medium" Type2="D">10.0</Energy>
   <Energy Type1="U" Type2="U">20.0</Energy>
   <Energy Type1="U" Type2="I">20.0</Energy>
   <Energy Type1="U" Type2="E">20.0</Energy>
   <Energy Type1="U" Type2="D">20.0</Energy>
   <Energy Type1="I" Type2="I">20.0</Energy>
   <Energy Type1="I" Type2="E">20.0</Energy>
   <Energy Type1="I" Type2="D">20.0</Energy>
   <Energy Type1="E" Type2="E">20.0</Energy>
   <Energy Type1="E" Type2="D">20.0</Energy>
   <Energy Type1="D" Type2="D">20.0</Energy>
   <NeighborOrder>2</NeighborOrder>
</Plugin>
   
   <Plugin Name="Secretion">
      
      <!-- Specification of secretion properties of select cell types. -->
      <!-- You may repeat Field element for each chemical field declared in the PDE solvers -->
      <!-- Specification of secretion properties of individual cells can be done in Python -->
   </Plugin>
   
   <Steppable Type="DiffusionSolverFE">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="virus">
         <DiffusionData>
            <FieldName>virus</FieldName>
            <GlobalDiffusionConstant>0.63</GlobalDiffusionConstant>
            <!-- approximately 6 um^2/h, 0.63 pixel^2/MCS in mucus -->
            <!-- estimated from https://www.nature.com/articles/s42003-022-03204-3 -->
            <!-- look at the "list pedro" document for more details on this estimate -->
            <GlobalDecayConstant>0.0</GlobalDecayConstant>
            <!-- <InitialConcentrationExpression>5*(x==149)*(y==149)</InitialConcentrationExpression> -->
            <!-- <InitialConcentrationExpression>1</InitialConcentrationExpression> -->
         </DiffusionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <Periodic/>
            </Plane>
            <Plane Axis="Y">
               <Periodic/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
      <DiffusionField Name="IFN">
         <DiffusionData>
            <FieldName>IFN</FieldName>
            <GlobalDiffusionConstant>31.0</GlobalDiffusionConstant>
            <!-- D=31 pixels^2/MCS, estimate from hydrodynamic radius and in mucus -->
            <!-- 54h of relaxation time, 6mcs per hour, 324 relax time, decay=0.0031 -->
            <GlobalDecayConstant>0.0031</GlobalDecayConstant>
            <InitialConcentrationExpression>10.0</InitialConcentrationExpression>
         </DiffusionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <Periodic/>
            </Plane>
            <Plane Axis="Y">
               <Periodic/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="0" y="0" z="0"/>
         <BoxMax x="301" y="301" z="1"/>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>U</Types>
      </Region>
   </Steppable>
</CompuCell3D>
